PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      draggable = True
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent prime_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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      text [set every repeat]:
        $prime
    TextComponent mask_text
      letterHeight = 0.05
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
      text = ####
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    TextComponent targer_text
      letterHeight = 0.05
      startVal [time (s)] = 0.7
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      text [set every repeat]:
        $target
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'prime': 'happy', 'prime_valence': 'positive', 'target': 'joy', 'target_valence': 'positive', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'smile', 'prime_valence': 'positive', 'target': 'peace', 'target_valence': 'positive', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'kind', 'prime_valence': 'positive', 'target': 'warm', 'target_valence': 'positive', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'love', 'prime_valence': 'positive', 'target': 'sweet', 'target_valence': 'positive', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'calm', 'prime_valence': 'positive', 'target': 'flower', 'target_valence': 'positive', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'angry', 'prime_valence': 'negative', 'target': 'pain', 'target_valence': 'negative', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'hatred', 'prime_valence': 'negative', 'target': 'war', 'target_valence': 'negative', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'disgust', 'prime_valence': 'negative', 'target': 'rotten', 'target_valence': 'negative', 'congruency': 'congruent', 'correct_response': 'right'},
      {'prime': 'fear', 'prime_valence': 'negative', 'target': 'danger', 'target_valence': 'negative', 'congruency': 'congruent', 'correct_response': 'right'}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
    Routine trial
  LoopTerminator trials
